PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = #FAFAFA
  expName = mf_amp
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Routines
  Routine trial_2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
  Routine break_3
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Moving on...
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  Routine AMP_nonword
    KeyboardComponent resp_AMP
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
    TextComponent AMP_maskstim
      color = #212121
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $masks
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    ImageComponent key_reminder_2
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine AMP_word
    TextComponent AMP_wordstim
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .075
      text [set every repeat] = $words
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    TextComponent gap_1
      letterHeight = 0.1
      startVal [time (s)] = 0.075
      stopVal [duration (s)] = .025
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    CodeComponent code_3
      Code Type = Py
      End Experiment:
        os.remove("AMP_conditions.csv")
    TextComponent AMP_nonwordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .15
      text [set every repeat] = $nonwords
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  Routine instr1
    TextComponent instr_1
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the Language and Emotion study!
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    TextComponent instr_2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = The goal of this experiment is to better understand how people react to language
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    TextComponent instr_3
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = You will be asked to complete three different tasks, followed by a short survey.
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    TextComponent instr_4
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = Before we begin, please make sure your fingers are on the correct keys.
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    TextComponent instr_5
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 24
      stopVal [duration (s)] = 4
      text = Your right index finger should be on the left arrow key
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    TextComponent instr_6
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 4
      text = Your right ring finger should be on the right arrow key
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    ImageComponent image
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 32
      stopVal [duration (s)] = 4
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    TextComponent instr_7
      color = #212121
      durationEstim = 6
      letterHeight = 0.05
      startVal [time (s)] = 36
      text = If you are ready to begin please press the right arrow key
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    KeyboardComponent key_resp_AMP_instr1
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 36
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    CodeComponent code_11
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:         continueRoutine = False
  Routine instr_AMP
    TextComponent instr_AMP1
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Welcome to the first task!

        In this task, you will see a selection of words.
    TextComponent instr_AMP2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = After seeing each word, you will see a nonsense word.
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    TextComponent instr_AMP3
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = After this, you will see a string of "&" symbols
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    TextComponent instr_AMP4
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 10
      text = Upon seeing the "&" symbols, you will rate whether the nonsense word you just saw made you feel positive or negative
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    TextComponent instr_AMP5
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = If the nonsense word made you feel positive, press the right arrow key
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    TextComponent instr_AMP6
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
      text = If the non-word made you feel negative, press the left arrow key
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    ImageComponent image_4
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP7
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = Remember you are rating the nonsense word, NOT the word that came before it.
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    TextComponent instr_AMP8
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 6
      text = Let's do a practice round.
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    TextComponent instr_AMP13
      color = #212121
      durationEstim = 6
      letterHeight = 0.05
      startVal [time (s)] = 54
      text = When you are ready to begin press the right arrow key
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    KeyboardComponent resp_AMP_ready1
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 54
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    CodeComponent code_12
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine AMP_prac_word
    TextComponent AMP_wordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      text [set every repeat] = $words
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    TextComponent gap
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .125
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd
        import numpy as np

        # reading in the CSV so that I can generate the conditions file for the AMP
        words = pd.read_csv("words4exp.csv")

        # Here are the row indices for all of the words in the full CSV.

        full_list = list(range(0,341))
        care_virtue = list(range(0,12))
        care_vice = list(range(12,24))
        fair_virtue = list(range(24,36))
        fair_vice = list(range(36,48))
        loyal_virtue = list(range(48,60))
        loyal_vice = list(range(60,72))
        auth_virtue = list(range(72,84))
        auth_vice = list(range(84,96))
        sanc_virtue = list(range(96,108))
        sanc_vice = list(range(108,120))
        neutral = list(range(120,170))
        nonword = list(range(170,340))
        control = [340,341]

        # Taking a sample from each category for the AMP

        care_virtue_amp = random.sample(care_virtue, 7)
        care_vice_amp = random.sample(care_vice, 7)
        fair_virtue_amp = random.sample(fair_virtue, 7)
        fair_vice_amp = random.sample(fair_vice, 7)
        loyal_virtue_amp = random.sample(loyal_virtue, 7)
        loyal_vice_amp = random.sample(loyal_vice, 7)
        auth_virtue_amp = random.sample(auth_virtue, 7)
        auth_vice_amp = random.sample(auth_vice, 7)
        sanc_virtue_amp = random.sample(sanc_virtue, 7)
        sanc_vice_amp = random.sample(sanc_vice, 7)
        nonword_amp = random.sample(nonword, 72)
        control_amp = control

        # Concatenating all of these samples together for the final list.

        AMP_words = care_virtue_amp + care_vice_amp + fair_virtue_amp + fair_vice_amp + loyal_virtue_amp + loyal_vice_amp + auth_virtue_amp + auth_vice_amp + sanc_virtue_amp + sanc_vice_amp + control_amp

        # Now pulling the rows from the original CSV And putting them into a new CSV that will be original for each person.

        AMP_wordlist = words.loc[AMP_words].word.values
        AMP_masklist = words.loc[nonword_amp].masks.values
        AMP_nonwordlist = words.loc[nonword_amp].word.values
        AMP_corr_ans = words.loc[AMP_words].correct_amp.values

        df1 = pd.DataFrame(
            {'words': AMP_wordlist.tolist(),
            'corr_ans': AMP_corr_ans.tolist()
            })
        df2 = pd.DataFrame(
            {'nonwords': AMP_nonwordlist.tolist(),
            'masks': AMP_masklist.tolist(),
            })

        df1 = df1.sample(frac=1).reset_index(drop=True)
        df2 = df2.sample(frac=1).reset_index(drop=True)
        df_full = pd.concat([df1,df2], axis = 1)

        df_full.to_csv("AMP_conditions.csv")

        # Getting the LDT words

        care_virtue_LDT = list(set(care_virtue).difference(care_virtue_amp))
        care_vice_LDT = list(set(care_vice).difference(care_vice_amp))
        fair_virtue_LDT = list(set(fair_virtue).difference(fair_virtue_amp))
        fair_vice_LDT = list(set(fair_vice).difference(fair_vice_amp))
        loyal_virtue_LDT = list(set(loyal_virtue).difference(loyal_virtue_amp))
        loyal_vice_LDT = list(set(loyal_vice).difference(loyal_vice_amp))
        auth_virtue_LDT = list(set(auth_virtue).difference(auth_virtue_amp))
        auth_vice_LDT = list(set(auth_vice).difference(auth_vice_amp))
        sanc_virtue_LDT = list(set(sanc_virtue).difference(sanc_virtue_amp))
        sanc_vice_LDT = list(set(sanc_vice).difference(sanc_vice_amp))
        nonword_LDT = list(set(nonword).difference(nonword_amp))
        neutral_LDT = neutral

        # Concatenating together all of the LDT words and then shuffling them for good measure.

        LDT_words = care_virtue_LDT + care_vice_LDT + fair_virtue_LDT + fair_vice_LDT + loyal_virtue_LDT + loyal_vice_LDT + auth_virtue_LDT + auth_vice_LDT + sanc_virtue_LDT + sanc_vice_LDT + nonword_LDT + neutral_LDT
        random.shuffle(LDT_words)

        # Generating a random selection of two words for the AMP practice.

        AMP_prac_selection = np.random.choice(50, 10, replace=False)
        AMP_prac_selection.tolist()

        # Generating a random selection of three words for the LDT practice.

        LDT_prac_selection = np.random.choice(300, 25, replace=False)
        LDT_prac_selection.tolist()
      End Experiment:
        os.remove("AMP_conditions.csv")
    TextComponent AMP_nonwordstim_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .225
      stopVal [duration (s)] = .300
      text [set every repeat] = $nonwords
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  Routine AMP_nonword_prac
    KeyboardComponent resp_AMP_prac
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent code_5
      Code Type = Py
    TextComponent AMP_maskstim_2
      color = #212121
      durationEstim = 5
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $masks
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    ImageComponent key_reminder
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine instr_AMP_2
    TextComponent instr_AMP9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_AMP14
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
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      text:
        Remember that LEFT is negative
        and RIGHT is positive.
    ImageComponent image_5
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_AMP_ready
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_13
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_AMP_3
    TextComponent instr_AMP12
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Let's go!
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    CodeComponent code_14
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_LDT
    TextComponent instr_LDT1
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Welcome to the second task!

        In this task, you will see a selection of words and non-words
    TextComponent instr_LDT2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        You will see a word or a non-word quickly followed by a string of symbols
    TextComponent instr_LDT3
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 8
      text = Upon seeing the symbols, you should decide as quickly as possible whether you saw a word or non-word
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    TextComponent instr_LDT4
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 6
      text = If you think you saw a word, press the right arrow key
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    TextComponent instr_LDT5
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 6
      text = If you think you saw a non-word, press the left arrow key
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    TextComponent instr_LDT6
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 32
      stopVal [duration (s)] = 6
      text = Please make sure your fingers are in the correct place
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    ImageComponent image_3
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 38
      stopVal [duration (s)] = 4
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    ImageComponent keyboard_reminder_LDT
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 42
      stopVal [duration (s)] = 4
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    TextComponent instr_LDT7
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 4
      text = Let's do a practice round
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    TextComponent instr_LDT8
      color = #212121
      durationEstim = 8
      letterHeight = 0.05
      startVal [time (s)] = 50
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 50
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    CodeComponent code_15
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_prac
    TextComponent LDT_word_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .06
      text [set every repeat] = $word
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    TextComponent LDT_mask_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      stopVal [duration (s)] = 2
      text [set every repeat] = $masks
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    KeyboardComponent resp_LDT_prac
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Py
      End Experiment:
        os.remove("AMP_conditions.csv")
    ImageComponent key_reminder_3
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      stopVal [duration (s)] = 2
      units = deg
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  Routine LDT_fix_prac
    ImageComponent LDT_fix_cross
      image = images/crosshair.png
      size = [50,50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_duration
      units = pix
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(100, 300)/1000
  Routine LDT_fix
    ImageComponent LDT_fix_cross_2
      image = images/crosshair.png
      size = [50,50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_duration
      units = pix
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(100, 300)/1000
  Routine instr_LDT_2
    TextComponent instr_LDT9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_LDT10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
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      text:
        Remember that LEFT is non-word
        and RIGHT is word.
    ImageComponent image_6
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_LDT_ready
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_16
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_tweets
    TextComponent instr_LDT1_2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Welcome to the third task!

        In this task, you will see a selection of tweets
    TextComponent instr_LDT2_2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = You will be asked to rate how the tweet made you feel.
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    TextComponent instr_LDT3_2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = If the tweet made you feel positive, press the RIGHT arrow key
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    TextComponent instr_LDT4_2
      color = #212121
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = If the tweet made you feel negative, press the LEFT arrow key
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    ImageComponent keyboard_reminder_LDT_2
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 24
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT8_2
      color = #212121
      durationEstim = 8
      letterHeight = 0.05
      startVal [time (s)] = 30
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    CodeComponent code_17
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_trial
    TextComponent LDT_word_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .06
      text [set every repeat] = $word
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    TextComponent LDT_mask_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      stopVal [duration (s)] = 2
      text [set every repeat] = $masks
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    KeyboardComponent resp_LDT_2
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_10
      Code Type = Py
      End Experiment:
        os.remove("AMP_conditions.csv")
    ImageComponent key_reminder_4
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      stopVal [duration (s)] = 2
      units = deg
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  Routine tweets
    TextComponent tweet
      color = #212121
      durationEstim = 10
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $tweets
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    KeyboardComponent resp_LDT
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    CodeComponent code_9
      Code Type = Py
      End Experiment:
        os.remove("AMP_conditions.csv")
Flow
  Routine instr1
  Routine instr_AMP
  LoopInitiator AMP_prac_loop loopType="TrialHandler"
    Selected rows = $AMP_prac_selection
    conditionsFile = AMP_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corr_ans', 'left'), ('words', 'praised'), ('masks', '&&&'), ('nonwords', 'mih')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'clean'), ('masks', '&&&&&&&&&&'), ('nonwords', 'galamitous')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'terrorist'), ('masks', '&&&&&&&'), ('nonwords', 'emports')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'groups'), ('masks', '&&&&&&&&&'), ('nonwords', 'Phintoism')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'growth'), ('masks', '&&&'), ('nonwords', 'asn')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'threatened'), ('masks', '&&&&&&&&'), ('nonwords', 'nuckheap')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'hand'), ('masks', '&&&&&&&&'), ('nonwords', 'divility')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'rebels'), ('masks', '&&&&&&&&'), ('nonwords', 'glacenta')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'actively'), ('masks', '&&&&&&&&&&'), ('nonwords', 'fonderland')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'restore'), ('masks', '&&&&&&&&&'), ('nonwords', 'gaultless')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'charges'), ('masks', '&&&&'), ('nonwords', 'yane')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'fair'), ('masks', '&&&&&&&&&&'), ('nonwords', 'neutralust')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'support'), ('masks', '&&&&&&&&&&&'), ('nonwords', 'ronviolence')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'free'), ('masks', '&&&&&&&'), ('nonwords', 'baklara')])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
    Routine AMP_prac_word
    Routine AMP_nonword_prac
  LoopTerminator AMP_prac_loop
  Routine instr_AMP_2
  Routine instr_AMP_3
  LoopInitiator AMP_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = AMP_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('corr_ans', 'left'), ('words', 'growth'), ('masks', '&&&&&&&&&&&'), ('nonwords', 'blunderints')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'freedom'), ('masks', '&&&&'), ('nonwords', 'tove')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'honored'), ('masks', '&&&&&&&&&&'), ('nonwords', 'lorthwhile')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'celebrated'), ('masks', '&&&&&&'), ('nonwords', 'chared')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'victim'), ('masks', '&&&&&&'), ('nonwords', 'prones')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'injured'), ('masks', '&&&&&&&&'), ('nonwords', 'hescribe')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'clean'), ('masks', '&&&&'), ('nonwords', 'coom')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'abuse'), ('masks', '&&&&&&&&&&&'), ('nonwords', 'nomparisons')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'friends'), ('masks', '&&&&&'), ('nonwords', 'framo')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'opportunity'), ('masks', '&&&&&'), ('nonwords', 'uller')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'restore'), ('masks', '&&&&&&&&&&'), ('nonwords', 'gationwide')]),
      OrderedDict([('corr_ans', 'left'), ('words', 'care'), ('masks', '&&&&&&'), ('nonwords', 'gikely')]),
      OrderedDict([('corr_ans', 'right'), ('words', 'army'), ('masks', '&&&&&&&&&'), ('nonwords', 'baladroit')]),
      OrderedDict([('corr_ans', None), ('words', 'negative'), ('masks', '&&&&&&&&'), ('nonwords', 'sidearbs')])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
    Routine AMP_word
    Routine AMP_nonword
  LoopTerminator AMP_trials
  Routine instr_LDT
  LoopInitiator LDT_prac_loop loopType="TrialHandler"
    Selected rows = $LDT_prac_selection
    conditionsFile = words4exp.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'care'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'help'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'health'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'good'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'peace'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&')]),
      OrderedDict([('word', 'safe'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'compassion'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&&&&')]),
      OrderedDict([('word', 'safety'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'improve'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&')]),
      OrderedDict([('word', 'growth'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'increase'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&&')])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
    Routine LDT_fix_prac
    Routine LDT_prac
  LoopTerminator LDT_prac_loop
  Routine instr_LDT_2
  LoopInitiator LDT_loop loopType="TrialHandler"
    Selected rows = 5
    conditionsFile = words4exp.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'care'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'help'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'health'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'good'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'peace'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&')]),
      OrderedDict([('word', 'safe'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&')]),
      OrderedDict([('word', 'compassion'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&&&&')]),
      OrderedDict([('word', 'safety'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'improve'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&')]),
      OrderedDict([('word', 'growth'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&')]),
      OrderedDict([('word', 'increase'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('masks', '&&&&&&&&')])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
    Routine LDT_fix
    Routine LDT_trial
  LoopTerminator LDT_loop
  Routine instr_tweets
  LoopInitiator tweet_loop loopType="TrialHandler"
    conditionsFile = tweets.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('tweet', '@yokoono Over 1,100,000 people killed by guns in the USA since @JohnLennon was shot and killed on Dec 8 1980 #StopGunViolence'), ('category', 'care.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweet', "@toad comments on Tina Marshall's anniversary and asks for public's help as he looks at new gun safety actions"), ('category', 'care.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweet', '@qarty But Mr. Sanders, in a free country, our guns should be free to have a terrorist. #gunsanity #gunsense'), ('category', 'fairness.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweet', '@jiordan Most gun control laws are ineffective at stopping crime'), ('category', 'fairness.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweet', '@bob35 Retweet if you support the Second Amendment!'), ('category', 'loyalty.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweet', "@laurien The Second Amendment must go: We ban lawn darts. It's time to ban guns"), ('category', 'loyalty.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweet', '@york We have an obligation to end #gunviolence'), ('category', 'authority.virtue'), ('corr_ans', 'left'), ('topic', 'gun\xa0')]),
      OrderedDict([('tweet', "@sabrina49 Gun bans don't disarm criminals, gun bans attract them"), ('category', 'authority.vice'), ('corr_ans', 'right'), ('topic', 'gun')])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
    Routine tweets
  LoopTerminator tweet_loop
