PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.765,0.765,0.765]
  expName = mf_amp_cond1
  logging level = warning
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Routines
  Routine instr_AMP
    TextComponent instr_AMP1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the first task! In this task, you will see a selection of words.
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    TextComponent instr_AMP2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = After seeing each word, you will see a nonsense word.
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    TextComponent instr_AMP3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = After this, you will see a string of "&" symbols
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    TextComponent instr_AMP4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 10
      text = Upon seeing the "&" symbols, you will rate whether the nonsense word you just saw made you feel pleasant or unpleasant
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    TextComponent instr_AMP5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = If the nonsense word made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_AMP6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
      text = If the nonsense made you feel unpleasant, press the LEFT arrow key
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    ImageComponent image_4
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = Remember you are rating the nonsense word, NOT the word that came before it.
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    TextComponent instr_AMP8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 6
      text = Let's do a practice round.
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    TextComponent instr_AMP13
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 58
      text = When you are ready to begin press the right arrow key
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    KeyboardComponent resp_AMP_ready1
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 58
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr1
    TextComponent instr_2
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = The goal of this experiment is to better understand how people react to language
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    TextComponent instr_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = You will be asked to complete three different tasks, followed by a short survey.
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    TextComponent instr_4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = Before we begin, please make sure your fingers are on the correct keys.
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    TextComponent instr_5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = Your right index finger should be on the left arrow key
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    TextComponent instr_6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 24
      stopVal [duration (s)] = 4
      text = Your right ring finger should be on the right arrow key
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    ImageComponent image
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 28
      stopVal [duration (s)] = 4
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    TextComponent instr_7
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      text = If you are ready to begin please press the right arrow key
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    KeyboardComponent key_resp_AMP_instr1
      allowedKeys = 'right','esc'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 38
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    CodeComponent code_11
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:         continueRoutine = False
  Routine instr_LDT_2
    TextComponent instr_LDT9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_LDT10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is nonsense word and RIGHT is real word.
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    ImageComponent image_6
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_LDT_ready
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine AMP_prac_word
    TextComponent AMP_wordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      text [set every repeat] = $words
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    TextComponent gap
      font = Verdana
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .125
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd
        import numpy as np

        # reading in the CSV so that I can generate the conditions file for the AMP
        words = pd.read_csv("condition_files\words4exp.csv")

        # Here are the row indices for all of the words in the full CSV.

        unique_cats = {k:None for k in words.category.unique()}
        for k,v in unique_cats.items():
            unique_cats[k] = list(words[words.category == k].index.values)

        # Taking a sample from each category for the AMP and plugging the rest into the LDT

        full_amp_words = {k:None for k in unique_cats.keys() if k != "neutral"}
        full_ldt_words = {k:None for k in unique_cats.keys()}

        for k,v in unique_cats.items():
            if "." in str(k):
                full_amp_words[k] = random.sample(unique_cats[k],7)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k == "nonword":
                full_amp_words[k] = random.sample(unique_cats[k],92)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k =="control":
                full_amp_words[k] = unique_cats[k]
            if k == "neutral":
                full_ldt_words[k] = unique_cats[k]

        # Generating the final list of AMP words

        amp_moral_words = []
        amp_nonwords = []
        for k,v in full_amp_words.items():
            if k != "nonword":
                for i in v:
                    amp_moral_words.append(i)
            if k == "nonword":
                for i in v:
                    amp_nonwords.append(i)

        # Taking a random sample of 10 of the nonwords to use as primes, and then adding them to the primes list amp_nonword_primes = random.sample(amp_nonwords,10) amp_primes_list = amp_moral_words + amp_nonword_primes  for x in amp_nonword_primes:   amp_nonwords.remove(x)

        amp_nonword_select = random.sample(amp_nonwords,10)
        amp_full_list = amp_moral_words + amp_nonword_select

        for x in amp_nonword_select:
            amp_nonwords.remove(x)

        # Pulling the words, correct answers, and categories for all of the indices for our moral words plus our ten nonword controls
        AMP_wordlist = words.loc[amp_full_list].words.values
        AMP_corr_ans = words.loc[amp_full_list].correct_amp.values
        AMP_category = words.loc[amp_full_list].category.values

        #pulling the nonwords and masks for our targets that weren't selected to be included in the prime
        AMP_nonwordlist = words.loc[amp_nonwords].words.values
        AMP_masklist = words.loc[amp_nonwords].masks.values

        # df1 is the words that will be used as primes and their associated categories and correct answers
        df1 = pd.DataFrame(
            {'words': AMP_wordlist.tolist(),
            'corr_ans': AMP_corr_ans.tolist(),
            'category': AMP_category.tolist()
            })

        # df2 is the nonwords that will be used as targets and their associated masks
        df2 = pd.DataFrame(
            {'nonwords': AMP_nonwordlist.tolist(),
            'mask': AMP_masklist.tolist()
            })

        # Shuffling the words once and then generating four

        primes_rep1 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep1 = df2.sample(frac=1).reset_index(drop=True)

        primes_rep2 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep2 = df2.sample(frac=1).reset_index(drop=True)

        primes_rep3 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep3 = df2.sample(frac=1).reset_index(drop=True)

        primes_rep4 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep4 = df2.sample(frac=1).reset_index(drop=True)

        # Concatenating all of the primes and targets horizontally

        rep1 = pd.concat([primes_rep1,targets_rep1], axis = 1)
        rep2 = pd.concat([primes_rep2,targets_rep2], axis = 1)
        rep3 = pd.concat([primes_rep3,targets_rep3], axis = 1)
        rep4 = pd.concat([primes_rep4,targets_rep4], axis = 1)

        # Concatenating all of the reps horizontally

        df_full = pd.concat([rep1,rep2,rep3,rep4], axis = 0)

        df_full.reset_index(inplace=True, drop=True)

        df_full.to_csv("condition_files\AMP_conditions.csv")

        # Getting the LDT words

        ldt_wordlist = []

        for k,v in full_ldt_words.items():
            if k != "control":
                for i in v:
                    ldt_wordlist.append(i)

        # Pulling the words, correct answers, and categories for all of the indices for our words
        LDT_words = words.loc[ldt_wordlist].words.values
        LDT_corr = words.loc[ldt_wordlist].correct_ldt.values
        LDT_category = words.loc[ldt_wordlist].category.values
        LDT_masklist = words.loc[ldt_wordlist].masks.values

        # Creating a dataframe and writing to CSV
        df_ldt = pd.DataFrame(
            {'words': LDT_words.tolist(),
            'corr_ans': LDT_corr.tolist(),
            'category': LDT_category.tolist(),
            'mask': LDT_masklist.tolist()
            })

        df_ldt_shuff = df_ldt.sample(frac=1).reset_index(drop=True)

        df_ldt_shuff.to_csv("condition_files\LDT_conditions.csv")
    TextComponent AMP_nonwordstim_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .225
      stopVal [duration (s)] = .300
      text [set every repeat] = $nonwords
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  Routine trial_2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
  Routine instr_tweets
    TextComponent instr_LDT1_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the third task! In this task, you will see a selection of tweets
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    TextComponent instr_LDT2_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = You will be asked to rate how the tweet made you feel.
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    TextComponent instr_LDT3_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = If the tweet made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_LDT4_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = If the tweet made you feel unpleasant, press the LEFT arrow key
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    ImageComponent keyboard_reminder_LDT_2
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 24
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT8_2
      color = #212121
      durationEstim = 8
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 30
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_LDT
    TextComponent instr_LDT1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the second task! In this task, you will see a selection of real words and nonsense words
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    TextComponent instr_LDT2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        You will see a real word or a nonsense word quickly followed by a string of "&" symbols
    TextComponent instr_LDT3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 8
      text = Upon seeing the "&" symbols, you should decide as quickly as possible whether you saw a real word or nonsense word
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    TextComponent instr_LDT4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 6
      text = If you think you saw a real word, press the RIGHT arrow key
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    TextComponent instr_LDT5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 6
      text = If you think you saw a nonsense word, press the LEFT arrow key
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    TextComponent instr_LDT6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      stopVal [duration (s)] = 6
      text = Please make sure your fingers are in the correct place
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    ImageComponent image_3
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 38
      stopVal [duration (s)] = 4
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    ImageComponent keyboard_reminder_LDT
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 42
      stopVal [duration (s)] = 4
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    TextComponent instr_LDT7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = The words may be difficult to see, but please do the best you can
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    TextComponent instr_LT8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 4
      text = Let's do a practice round
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    TextComponent instr_LDT9_
      color = #212121
      durationEstim = 8
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 56
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr
      allowedKeys = 'right'
      durationEstim = 8
      forceEndRoutine = True
      startVal [time (s)] = 56
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    CodeComponent code_15
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_fix_prac
    ImageComponent LDT_fix_cross
      image = images/crosshair.png
      size = [50,50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_duration
      units = pix
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(100, 300)/1000
  Routine instr_AMP_3
    TextComponent instr_AMP12
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Let's go!
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    CodeComponent code_14
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_prac
    TextComponent LDT_word_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .06
      text [set every repeat] = $words
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    TextComponent LDT_mask_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT_prac
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                LDT_pracloop.finished = True
      End Routine:
        thisExp.addData('task', "LDT_prac")
        thisExp.addData('keypress', resp_LDT_prac.keys)
        thisExp.addData('RT', resp_LDT_prac.rt)
        thisExp.addData('corr', resp_LDT_prac.corr)
    ImageComponent key_reminder_3
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      units = deg
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  Routine AMP_nonword
    KeyboardComponent resp_AMP
      allowedKeys = 'left','right',"escape"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_trials.finished = True
      End Routine:
        thisExp.addData('task', "AMP")
        thisExp.addData('keypress', resp_AMP.keys)
        thisExp.addData('RT', resp_AMP.rt)
        thisExp.addData('corr', resp_AMP.corr)
    TextComponent AMP_maskstim
      color = #212121
      durationEstim = 5
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $mask
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    ImageComponent key_reminder_2
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine tweets
    TextComponent tweet
      color = #212121
      durationEstim = 10
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $tweets
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    KeyboardComponent resp_tweets
      allowedKeys = 'left','right','escape'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                tweet_loop.finished = True
      End Routine:
        thisExp.addData('task', "tweets")
        thisExp.addData('keypress', resp_tweets.keys)
        thisExp.addData('RT', resp_tweets.rt)
    ImageComponent tweet_layout_reminder
      durationEstim = 10
      image = images\layout_reminder_AMP.png
      pos = (0, -8)
      size = (20, 10)
      startVal [time (s)] = 0.0
      units = deg
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  Routine break_3
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Moving on...
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  Routine AMP_nonword_prac
    KeyboardComponent resp_AMP_prac
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_pracloop.finished = True
      End Routine:
        thisExp.addData('task', "AMP_prac")
        thisExp.addData('keypress', resp_AMP_prac.keys)
        thisExp.addData('RT', resp_AMP_prac.rt)
    TextComponent AMP_maskstim_2
      color = #212121
      durationEstim = 5
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $mask
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    ImageComponent key_reminder
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine LDT_trial
    TextComponent LDT_word_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .06
      text [set every repeat] = $words
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    TextComponent LDT_mask_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT
      allowedKeys = 'left','right','escape'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
      storeCorrect = True
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                LDT_trials.finished = True
      End Routine:
        thisExp.addData('task', "LDT")
        thisExp.addData('keypress', resp_LDT.keys)
        thisExp.addData('RT', resp_LDT.rt)
        thisExp.addData('corr', resp_LDT.corr)
    ImageComponent key_reminder_4
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      units = deg
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  Routine AMP_word
    TextComponent AMP_wordstim
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      text [set every repeat] = $words
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    TextComponent gap_1
      font = Verdana
      letterHeight = 0.1
      startVal [time (s)] = .1
      stopVal [duration (s)] = .125
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    CodeComponent code_3
      Code Type = Py
    TextComponent AMP_nonwordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.225
      stopVal [duration (s)] = .3
      text [set every repeat] = $nonwords
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  Routine instr_AMP_2
    TextComponent instr_AMP9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_AMP14
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is unpleasant and RIGHT is pleasant.
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    ImageComponent image_5
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_AMP_ready
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_13
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine hold
    TextComponent text
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Welcome to the Language and Emotion study! Please wait until a researcher says you may begin.
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    KeyboardComponent begin_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    ImageComponent LDT_fix_cross_2
      image = images/crosshair.png
      size = [50,50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_duration
      units = pix
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(100, 300)/1000
  Routine AMP_feedback
    RatingScaleComponent AMP_nonword_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = 10
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      customize_everything:
        scale = "To what extent did you base your ratings on the nonsense words you saw?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_word_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [condition] = $AMP_nonword_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you base your ratings on the words that appeared before the nonsense words?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_random_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = $AMP_word_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent AMP_feedback_instr
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a few questions. Please note that your responses to these questions are completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_feedback
    RatingScaleComponent LDT_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = 10
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent LDT_feedback_inst
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a question. Please note that your response to this question is completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine end
    TextComponent instr_end
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Thank you for participating. You will now respond to a short survey.
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    CodeComponent code_18
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
Flow
  Routine hold
  Routine instr1
  Routine instr_AMP
  LoopInitiator AMP_pracloop loopType="TrialHandler"
    conditionsFile = condition_files\amp_testrun.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'car'), ('nonwords', 'cemtuper'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'banana'), ('nonwords', 'kacket'), ('mask', '&&&&&&')]),
      OrderedDict([('words', 'keyboard'), ('nonwords', 'senk'), ('mask', '&&&&')]),
      OrderedDict([('words', 'scarf'), ('nonwords', 'bisebell'), ('mask', '&&&&&&&&')])]
    Routine fix
    Routine AMP_prac_word
    Routine AMP_nonword_prac
  LoopTerminator AMP_pracloop
  Routine instr_AMP_2
  Routine instr_AMP_3
  LoopInitiator AMP_trials loopType="TrialHandler"
    conditionsFile = condition_files\AMP_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'promised'), ('corr_ans', 'left'), ('category', 'loyalty.virtue'), ('nonwords', 'pullness'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'clean'), ('corr_ans', 'left'), ('category', 'sanctity.virtue'), ('nonwords', 'ronviolence'), ('mask', '&&&&&&&&&&&')]),
      OrderedDict([('words', 'rejected'), ('corr_ans', 'right'), ('category', 'authority.vice'), ('nonwords', 'festate'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'good'), ('corr_ans', 'left'), ('category', 'care.virtue'), ('nonwords', 'quarterbocks'), ('mask', '&&&&&&&&&&&&')]),
      OrderedDict([('words', 'honored'), ('corr_ans', 'left'), ('category', 'authority.virtue'), ('nonwords', 'hatigue'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'respect'), ('corr_ans', 'left'), ('category', 'sanctity.virtue'), ('nonwords', 'infet'), ('mask', '&&&&&')]),
      OrderedDict([('words', 'pleasant'), ('corr_ans', None), ('category', 'control'), ('nonwords', 'supervuned'), ('mask', '&&&&&&&&&&')]),
      OrderedDict([('words', 'black'), ('corr_ans', 'right'), ('category', 'loyalty.vice'), ('nonwords', 'erks'), ('mask', '&&&&')]),
      OrderedDict([('words', 'drug'), ('corr_ans', 'right'), ('category', 'sanctity.vice'), ('nonwords', 'frojecting'), ('mask', '&&&&&&&&&&')]),
      OrderedDict([('words', 'accused'), ('corr_ans', 'right'), ('category', 'fairness.vice'), ('nonwords', 'forepo'), ('mask', '&&&&&&')])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
    Routine fix
    Routine AMP_word
    Routine AMP_nonword
  LoopTerminator AMP_trials
  Routine AMP_feedback
  Routine instr_LDT
  LoopInitiator LDT_pracloop loopType="TrialHandler"
    conditionsFile = condition_files\ldt_testrun.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'keyboard'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'bisebell'), ('mask', '&&&&&&&')])]
    Routine LDT_fix_prac
    Routine LDT_prac
  LoopTerminator LDT_pracloop
  Routine instr_LDT_2
  LoopInitiator LDT_trials loopType="TrialHandler"
    conditionsFile = condition_files\LDT_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', "counpy's"), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'pescinded'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'penalty'), ('corr_ans', 'left'), ('category', 'authority.vice'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'emassion'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'fonderland'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&&')]),
      OrderedDict([('words', 'pafer'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&')]),
      OrderedDict([('words', 'sidearbs'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'nackers'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'brotesque'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'even'), ('corr_ans', 'left'), ('category', 'neutral'), ('mask', '&&&&')]),
      OrderedDict([('words', 'discovars'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'opportunity'), ('corr_ans', 'left'), ('category', 'fairness.virtue'), ('mask', '&&&&&&&&&&&')]),
      OrderedDict([('words', 'ittutable'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'thabbily'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')])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
    Routine fix
    Routine LDT_trial
  LoopTerminator LDT_trials
  Routine LDT_feedback
  Routine instr_tweets
  LoopInitiator tweet_loop loopType="TrialHandler"
    conditionsFile = condition_files\tweets.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('tweets', '@yokoono Over 1,100,000 people killed by guns in the USA since @JohnLennon was shot and killed on Dec 8 1980 #StopGunViolence'), ('category', 'care.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweets', "@toad comments on Tina Marshall's anniversary and asks for public's help as he looks at new gun safety actions"), ('category', 'care.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweets', '@qarty But Mr. Sanders, in a free country, our guns should be free to have a terrorist. #gunsanity #gunsense'), ('category', 'fairness.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweets', '@jiordan Most gun control laws are ineffective at stopping crime'), ('category', 'fairness.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweets', '@bob35 Retweet if you support the Second Amendment!'), ('category', 'loyalty.virtue'), ('corr_ans', 'left'), ('topic', 'gun')]),
      OrderedDict([('tweets', "@laurien The Second Amendment must go: We ban lawn darts. It's time to ban guns"), ('category', 'loyalty.vice'), ('corr_ans', 'right'), ('topic', 'gun')]),
      OrderedDict([('tweets', '@york We have an obligation to end #gunviolence'), ('category', 'authority.virtue'), ('corr_ans', 'left'), ('topic', 'gun\xa0')]),
      OrderedDict([('tweets', "@sabrina49 Gun bans don't disarm criminals, gun bans attract them"), ('category', 'authority.vice'), ('corr_ans', 'right'), ('topic', 'gun')])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
    Routine tweets
  LoopTerminator tweet_loop
  Routine end
