PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[0.765,0.765,0.765]
  expName = mf_amp_cond1
  logging level = warning
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Routines
  Routine instr_AMP
    TextComponent instr_AMP1_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the second task! In this task, you will see a selection of symbols.
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    TextComponent instr_AMP1_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = Before you see each symbol, you will see a string of letters.
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    TextComponent instr_AMP1_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = This string of letters is a cue that the symbol is about to appear
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    TextComponent instr_AMP1_4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 10
      text = You will be asked to rate whether each symbol makes you feel pleasant or unpleasant.
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    TextComponent instr_AMP1_5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = If the symbol made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_AMP1_6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
      text = If the symbol made you feel unpleasant, press the LEFT arrow key
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    ImageComponent image_4
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP1_7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = Remember to press RIGHT for pleasant and LEFT for unpleasant
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    TextComponent instr_AMP1_8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 10
      text = The symbol will quickly disappear and will be replaced with white noise, so be sure to make your responses as quickly as possible.
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    TextComponent instr_AMP1_9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 62
      stopVal [duration (s)] = 6
      text = Let's do a practice round.
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    TextComponent instr_AMP1_10
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 68
      text = When you are ready to begin press the right arrow key
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    KeyboardComponent resp_AMP_ready1
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 68
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine instr1
    TextComponent instr_2
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = The goal of this experiment is to better understand how people react to symbols and understand language
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    TextComponent instr_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = You will be asked to complete three different tasks, followed by a short survey.
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    TextComponent instr_4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = Before we begin, please make sure your fingers are on the correct keys.
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    TextComponent instr_5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = Your right index finger should be on the left arrow key
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    TextComponent instr_6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 24
      stopVal [duration (s)] = 4
      text = Your right ring finger should be on the right arrow key
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    ImageComponent image
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 28
      stopVal [duration (s)] = 4
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    TextComponent instr_7
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      text = If you are ready to begin please press the right arrow key
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    KeyboardComponent key_resp_AMP_instr1
      allowedKeys = 'right','esc'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 38
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    CodeComponent code_11
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:         continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine instr_LDT_2
    TextComponent instr_LDT9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_LDT10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is nonsense word and RIGHT is real word.
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    ImageComponent image_6
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_LDT_ready
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine AMP_prac_word
    TextComponent AMP_wordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prime_dur
      text [set every repeat] = $words
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    TextComponent gap
      font = Verdana
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .125
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    TextComponent AMP_nonwordstim_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .225
      stopVal [duration (s)] = .300
      text [set every repeat] = $nonwords
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  Routine instr_LDT
    TextComponent instr_LDT1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the third task! In this task, you will see a selection of real words and nonsense words.
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    TextComponent instr_LDT2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        You will see a real word or a nonsense word quickly followed by a string of "&" symbols
    TextComponent instr_LDT3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 8
      text = Upon seeing the "&" symbols, you should decide as quickly as possible whether you saw a real word or nonsense word
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    TextComponent instr_LDT4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 6
      text = If you think you saw a real word, press the RIGHT arrow key
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    TextComponent instr_LDT5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 6
      text = If you think you saw a nonsense word, press the LEFT arrow key
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    TextComponent instr_LDT6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      stopVal [duration (s)] = 6
      text = Please make sure your fingers are in the correct place
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    ImageComponent image_3
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 38
      stopVal [duration (s)] = 4
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    ImageComponent keyboard_reminder_LDT
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 42
      stopVal [duration (s)] = 4
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    TextComponent instr_LDT7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = The words may be difficult to see, but please do the best you can
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    TextComponent instr_LT8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 4
      text = Let's do a practice round
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    TextComponent instr_LDT9_
      color = #212121
      durationEstim = 8
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 56
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr
      allowedKeys = 'right'
      durationEstim = 8
      forceEndRoutine = True
      startVal [time (s)] = 56
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    CodeComponent code_15
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_AMP_3
    TextComponent instr_AMP3_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Let's go!
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    CodeComponent code_14
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine LDT_prac
    TextComponent LDT_word_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ldt_dur
      text [set every repeat] = $words
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    TextComponent LDT_mask_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT_prac
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        keys = []
        ldt_dur = random.randint(20, 100)/1000
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                LDT_pracs.finished = True
      End Routine:
        thisExp.addData('task', "LDT_prac")
        thisExp.addData('keypress', resp_LDT_prac.keys)
        thisExp.addData('RT', resp_LDT_prac.rt)
        thisExp.addData('corr', resp_LDT_prac.corr)
        thisExp.addData('exp_time', globalClock.getTime())
    ImageComponent key_reminder_3
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      units = deg
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  Routine LDT_trial
    TextComponent LDT_word_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ldt_dur
      text [set every repeat] = $words
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    TextComponent LDT_mask_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = .06
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT
      allowedKeys = 'left','right','escape'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = .06
      storeCorrect = True
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        keys = []
        ldt_dur = random.randint(20, 100)/1000
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                LDT_trials.finished = True
      End Routine:
        thisExp.addData('task', "LDT")
        thisExp.addData('keypress', resp_LDT.keys)
        thisExp.addData('RT', resp_LDT.rt)
        thisExp.addData('corr', resp_LDT.corr)
    ImageComponent key_reminder_4
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0.06
      units = deg
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  Routine instr_AMP_2
    TextComponent instr_AMP2_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_AMP2_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is unpleasant and RIGHT is pleasant.
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    ImageComponent image_5
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP2_3
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_AMP_ready
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_13
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine hold
    TextComponent text
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Welcome to the Language, Symbols, and Emotion study! Please wait until a researcher says you may begin.
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    KeyboardComponent begin_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd
        import numpy as np

        # Reading in the CSVs

        words = pd.read_csv("condition_files/words4exp.csv")
        symbols = pd.read_csv("condition_files/symbols.csv")

        # Generating word lists

        unique_cats = {k:None for k in words.category.unique()}

        for k,v in unique_cats.items():
            unique_cats[k] = list(words[words.category == k].index.values)

        full_amp_words = {k:None for k in unique_cats.keys() if k != "neutral"}
        full_ldt_words = {k:None for k in unique_cats.keys()}

        for k,v in unique_cats.items():
            if "." in str(k):
                full_amp_words[k] = random.sample(unique_cats[k],7)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k == "nonword":
                full_amp_words[k] = random.sample(unique_cats[k],10)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k =="control":
                full_amp_words[k] = unique_cats[k]
            if k == "neutral":
                full_ldt_words[k] = unique_cats[k]

        amp_primes = []
        amp_symbols = range(0,82)

        for k,v in full_amp_words.items():
            for i in v:
                amp_primes.append(i)

        # Pulling the words, correct answers, and categories for all of the indices for our moral words plus our ten nonword controls

        AMP_words = words.loc[amp_primes].words.values
        AMP_corr_ans = words.loc[amp_primes].correct_amp.values
        AMP_category = words.loc[amp_primes].category.values

        #pulling the nonwords and masks for our targets that weren't selected to be included in the prime

        AMP_symbols = symbols.loc[amp_symbols].symbol.values

        # df1 is the words that will be used as primes and their associated categories and correct answers

        df1 = pd.DataFrame(
            {'words': AMP_words.tolist(),
            'corr_ans': AMP_corr_ans.tolist(),
            'category': AMP_category.tolist()
            })

        # df2 is the nonwords that will be used as targets and their associated masks

        df2 = pd.DataFrame(
            {'symbols': AMP_symbols.tolist()
            })

        # Shuffling the words once and then generating four

        primes_rep1 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep1 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep2 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep2 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep3 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep3 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep4 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep4 = df2.sample(frac=1).reset_index(drop=True)

        # Concatenating all of the primes and targets horizontally
        rep1 = pd.concat([primes_rep1,targets_rep1], axis = 1)
        rep2 = pd.concat([primes_rep2,targets_rep2], axis = 1)
        rep3 = pd.concat([primes_rep3,targets_rep3], axis = 1)
        rep4 = pd.concat([primes_rep4,targets_rep4], axis = 1)

        # Concatenating all of the reps horizontally

        df_full = pd.concat([rep1,rep2,rep3,rep4], axis = 0)

        # Writing AMP conditions to CSV

        df_full.reset_index(inplace=True, drop=True)
        df_full.to_csv("condition_files/AMP_conditions.csv")

        # Generating LDT word list

        ldt_wordlist = []

        for k,v in full_ldt_words.items():
            if k != "control":
                for i in v:
                    ldt_wordlist.append(i)

        # Pulling the words, correct answers, categories, & masks for all of the indices for our words

        LDT_words = words.loc[ldt_wordlist].words.values
        LDT_corr = words.loc[ldt_wordlist].correct_ldt.values
        LDT_category = words.loc[ldt_wordlist].category.values
        LDT_masklist = words.loc[ldt_wordlist].masks.values

        df_ldt = pd.DataFrame(
            {'words': LDT_words.tolist(),
            'corr_ans': LDT_corr.tolist(),
            'category': LDT_category.tolist(),
            'mask': LDT_masklist.tolist()     })

        df_ldt.to_csv("condition_files/LDT_conditions.csv")
      Begin Routine:
        durs = [.01, .05, .1]
        prime_dur = random.choice(durs)
  Routine fix
    ImageComponent LDT_fix_cross
      image = images/crosshair.png
      size = [.05,.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_duration
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(1000, 2000)/1000
  Routine AMP_feedback
    RatingScaleComponent AMP_nonword_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = 10
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      customize_everything:
        scale = "To what extent did you base your ratings of the symbols on the symbols themselves?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_word_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [condition] = $AMP_nonword_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you base your ratings on the words that appeared before the symbols?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_random_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = $AMP_word_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent AMP_feedback_instr
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a few questions. Please note that your responses to these questions are completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine LDT_feedback
    RatingScaleComponent LDT_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = 10
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent LDT_feedback_inst
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a question. Please note that your response to this question is completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine end
    TextComponent instr_end
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Thank you for participating. You will now respond to a short survey.
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    CodeComponent code_18
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_logo
    TextComponent instr_logo1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Welcome to the first task! In this task, you will see a selection of symbols.
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    TextComponent instr_logo2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 10
      text = You will be asked to rate whether each symbol you see makes you feel pleasant or unpleasant.
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    TextComponent instr_logo3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      stopVal [duration (s)] = 6
      text = If the symbol made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_logo4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 22
      stopVal [duration (s)] = 6
      text = If the symbol made you feel unpleasant, press the LEFT arrow key
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    TextComponent instr_logo5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = The symbol will look something like this.
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    ImageComponent logo_example
      image = images/symbols/symbol_1.png
      size = (0.1, 0.1)
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
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    TextComponent instr_logo6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10
      text = Remember that you will press RIGHT if the symbol made you feel pleasant and LEFT if the symbol made you feel unpleasant.
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    ImageComponent logo_prac_layout_reminder
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 6
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    TextComponent instr_logo7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 56
      stopVal [duration (s)] = 6
      text = First, we will do a brief practice round.
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    TextComponent instr_logo8
      color = #212121
      durationEstim = 10
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 62
      text = When you are ready to begin, press the RIGHT arrow key.
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    KeyboardComponent resp_logo_rate
      allowedKeys = 'right'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 62
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    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine logo_prac
    ImageComponent img_logo_prac
      image = images/symbols/symbol_2.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    ImageComponent mask_logo_prac
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [time (s)] = .3
      units = height
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    ImageComponent key_reminder_logo_prac
      durationEstim = 3
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = .3
      units = deg
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    KeyboardComponent keypress_logo_prac
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = .3
      store = first key
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  Routine instr_logo_2
    TextComponent instr_logo9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_logo10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is unpleasant and RIGHT is pleasant.
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    ImageComponent image_7
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_logo11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the RIGHT arrow key
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    KeyboardComponent resp_logo_ready_2
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_17
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine AMP_trial_word
    TextComponent AMP_wordstim
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prime_dur
      text [set every repeat] = $words
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    TextComponent gap_1
      font = Verdana
      letterHeight = 0.1
      startVal [time (s)] = .1
      stopVal [duration (s)] = .125
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    CodeComponent code_3
      Code Type = Py
    TextComponent AMP_nonwordstim_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.225
      stopVal [duration (s)] = .3
      text [set every repeat] = $nonwords
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  Routine logo_trial
    ImageComponent img_logo_prac_2
      image [set every repeat] = $symbol
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    ImageComponent mask_logo_prac_2
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [time (s)] = .3
      units = height
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    ImageComponent key_reminder_logo_prac_2
      durationEstim = 3
      image = images/layout_reminder_AMP.png
      pos = (0, -7)
      size = (20, 10)
      startVal [time (s)] = .0
      units = deg
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    KeyboardComponent keypress_logo_prac_2
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        thisExp.addData('symbol_index', index)
  Routine AMP_prac_mask
    KeyboardComponent resp_AMP_prac
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_pracs.finished = True
      End Routine:
        thisExp.addData('task', "AMP_prac")
        thisExp.addData('keypress', resp_AMP_prac.keys)
        thisExp.addData('RT', resp_AMP_prac.rt)
        thisExp.addData('exp_time', globalClock.getTime())
    TextComponent AMP_maskstim_2
      color = #212121
      durationEstim = 5
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $mask
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    ImageComponent key_reminder
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine AMP_trial_mask
    KeyboardComponent resp_AMP
      allowedKeys = 'left','right',"escape"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_trials.finished = True
      End Routine:
        thisExp.addData('task', "AMP")
        thisExp.addData('keypress', resp_AMP.keys)
        thisExp.addData('RT', resp_AMP.rt)
        thisExp.addData('corr', resp_AMP.corr)
        thisExp.addData('exp_time', globalClock.getTime())
    TextComponent AMP_maskstim
      color = #212121
      durationEstim = 5
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $mask
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    ImageComponent key_reminder_2
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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Flow
  Routine hold
  Routine instr1
  Routine instr_logo
  Routine logo_prac
  Routine instr_logo_2
  LoopInitiator logo_trials loopType="TrialHandler"
    conditionsFile = condition_files/symbols.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('symbol', 'images/symbols/symbol_1.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_76.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_62.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_63.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_77.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_2.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_49.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_61.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_75.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_74.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_60.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_48.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_3.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_7.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_64.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_70.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_58.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_59.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_71.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_65.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_6.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_4.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_73.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_67.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_66.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_72.png')])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
    Routine logo_trial
  LoopTerminator logo_trials
  Routine instr_AMP
  LoopInitiator AMP_pracs loopType="TrialHandler"
    conditionsFile = condition_files/amp_testrun.csv
    loopType = random
    nReps = 1
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    Routine AMP_prac_word
    Routine AMP_prac_mask
  LoopTerminator AMP_pracs
  Routine instr_AMP_2
  Routine instr_AMP_3
  LoopInitiator AMP_trials loopType="TrialHandler"
    conditionsFile = condition_files/AMP_conditions.csv
    loopType = sequential
    nReps = 1
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    Routine AMP_trial_word
    Routine AMP_trial_mask
  LoopTerminator AMP_trials
  Routine AMP_feedback
  Routine instr_LDT
  LoopInitiator LDT_pracs loopType="TrialHandler"
    conditionsFile = condition_files\ldt_testrun.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'keyboard'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'bisebell'), ('mask', '&&&&&&&')])]
    Routine fix
    Routine LDT_prac
  LoopTerminator LDT_pracs
  Routine instr_LDT_2
  LoopInitiator LDT_trials loopType="TrialHandler"
    conditionsFile = condition_files\LDT_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', "counpy's"), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'pescinded'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'penalty'), ('corr_ans', 'left'), ('category', 'authority.vice'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'emassion'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'fonderland'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&&')]),
      OrderedDict([('words', 'pafer'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&')]),
      OrderedDict([('words', 'sidearbs'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')]),
      OrderedDict([('words', 'nackers'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&')]),
      OrderedDict([('words', 'brotesque'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'even'), ('corr_ans', 'left'), ('category', 'neutral'), ('mask', '&&&&')]),
      OrderedDict([('words', 'discovars'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'opportunity'), ('corr_ans', 'left'), ('category', 'fairness.virtue'), ('mask', '&&&&&&&&&&&')]),
      OrderedDict([('words', 'ittutable'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&&')]),
      OrderedDict([('words', 'thabbily'), ('corr_ans', 'right'), ('category', 'nonword'), ('mask', '&&&&&&&&')])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
    Routine fix
    Routine LDT_trial
  LoopTerminator LDT_trials
  Routine LDT_feedback
  Routine end
