PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant ID'], expName, expInfo['date'])
  Experiment info = {'participant ID': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1680, 1050]
  color = $[0.765,0.765,0.765]
  expName = mf_amp
  logging level = warning
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Routines
  Routine instr_AMP
    TextComponent instr_AMP1_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = In this task, you will see the same symbols you just rated.
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    TextComponent instr_AMP1_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = Before you see each symbol, you will see a string of letters.
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    TextComponent instr_AMP1_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = This string of letters is a cue that the symbol is about to appear, helping you respond faster.
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    TextComponent instr_AMP1_4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 10
      text = You will be asked to rate whether each symbol makes you feel pleasant or unpleasant.
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    TextComponent instr_AMP1_5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = If the symbol made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_AMP1_6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
      text = If the symbol made you feel unpleasant, press the LEFT arrow key
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    ImageComponent image_4
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP1_7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = Remember to press RIGHT for pleasant and LEFT for unpleasant
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    TextComponent instr_AMP1_8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 10
      text = The symbol will quickly disappear and will be replaced with white noise, so be sure to make your responses as quickly as possible.
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    TextComponent instr_AMP1_9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 62
      stopVal [duration (s)] = 6
      text = Let's do a practice round.
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    TextComponent instr_AMP1_10
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 68
      text = When you are ready to begin press the right arrow key
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    KeyboardComponent resp_AMP_ready1
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 68
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    CodeComponent code_06
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine instr_LDT_2
    TextComponent instr_LDT9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_LDT10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is nonsense word and RIGHT is real word.
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    ImageComponent image_6
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_LDT11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_LDT_ready
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_LDT
    TextComponent instr_LDT1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = In this task, you will see a selection of real words and nonsense words.
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    TextComponent instr_LDT2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        You will see a real word or a nonsense word quickly followed by a string of "&" symbols
    TextComponent instr_LDT3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 8
      text = Upon seeing the "&" symbols, you should decide as quickly as possible whether you saw a real word or nonsense word
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    TextComponent instr_LDT4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 6
      text = If you think you saw a real word, press the RIGHT arrow key
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    TextComponent instr_LDT5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 6
      text = If you think you saw a nonsense word, press the LEFT arrow key
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    TextComponent instr_LDT6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      stopVal [duration (s)] = 6
      text = Please make sure your fingers are in the correct place
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    ImageComponent image_3
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 38
      stopVal [duration (s)] = 4
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    ImageComponent keyboard_reminder_LDT
      image = images/layout_reminder_LDT.png
      size = (0.9, 0.5)
      startVal [time (s)] = 42
      stopVal [duration (s)] = 4
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    TextComponent instr_LDT7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 6
      text = The words may be difficult to see, but please do the best you can
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    TextComponent instr_LT8
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 52
      stopVal [duration (s)] = 4
      text = Let's do a practice round
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    TextComponent instr_LDT9_
      color = #212121
      durationEstim = 8
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 56
      text = When you are ready to begin, press the right arrow key
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    KeyboardComponent key_resp_LDT_instr
      allowedKeys = 'right'
      durationEstim = 8
      forceEndRoutine = True
      startVal [time (s)] = 56
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    CodeComponent code_14
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine instr_AMP_3
    TextComponent instr_AMP3_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Let's go!
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    CodeComponent code_11
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine instr_AMP_2
    TextComponent instr_AMP2_1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_AMP2_2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is unpleasant and RIGHT is pleasant.
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    ImageComponent image_5
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_AMP2_3
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the right arrow key
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    KeyboardComponent resp_AMP_ready
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_09
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine hold
    TextComponent text
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Welcome to the Language, Symbols, and Emotion study! Please wait until a researcher says you may begin.
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    KeyboardComponent begin_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_01
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd
        import numpy as np
        import webbrowser

        globalClock = core.Clock()
        routineClock = core.Clock()

        # Reading in the CSVs

        words = pd.read_csv("condition_files/words4exp.csv")
        symbols = pd.read_csv("condition_files/symbols.csv")
        memtask_words = pd.read_csv("condition_files/mem_task_words.csv")

        # Generating word lists

        unique_cats = {k:None for k in words.category.unique()}

        for k,v in unique_cats.items():
            unique_cats[k] = list(words[words.category == k].index.values)

        full_amp_words = {k:None for k in unique_cats.keys() if k != "neutral"}
        full_ldt_words = {k:None for k in unique_cats.keys()}

        for k,v in unique_cats.items():
            if "." in str(k):
                full_amp_words[k] = random.sample(unique_cats[k],7)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k == "nonword":
                full_amp_words[k] = random.sample(unique_cats[k],10)
                full_ldt_words[k] = [x for x in unique_cats[k] if x not in full_amp_words[k]]
            if k =="control":
                full_amp_words[k] = unique_cats[k]
            if k == "neutral":
                full_ldt_words[k] = unique_cats[k]

        amp_primes = []
        amp_symbols = range(0,82)

        for k,v in full_amp_words.items():
            for i in v:
                amp_primes.append(i)

        # Pulling the words, correct answers, and categories for all of the indices for our moral words plus our ten nonword controls

        AMP_words = words.loc[amp_primes].words.values
        AMP_corr_ans = words.loc[amp_primes].correct_amp.values
        AMP_category = words.loc[amp_primes].category.values
        AMP_masks = words.loc[amp_primes].masks.values

        #pulling the nonwords and masks for our targets that weren't selected to be included in the prime

        AMP_symbols = symbols.loc[amp_symbols].symbol.values

        # df1 is the words that will be used as primes and their associated categories and correct answers

        df1 = pd.DataFrame(
            {'words': AMP_words.tolist(),
            'corr_ans': AMP_corr_ans.tolist(),
            'category': AMP_category.tolist(),
            'masks': AMP_masks.tolist()
            })

        # df2 is the nonwords that will be used as targets and their associated masks

        df2 = pd.DataFrame(
            {'symbols': AMP_symbols.tolist()
            })

        # Shuffling the words once and then generating four

        primes_rep1 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep1 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep2 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep2 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep3 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep3 = df2.sample(frac=1).reset_index(drop=True)
        primes_rep4 = df1.sample(frac=1).reset_index(drop=True)
        targets_rep4 = df2.sample(frac=1).reset_index(drop=True)

        # Concatenating all of the primes and targets and writing them to condition files.

        rep1 = pd.concat([primes_rep1,targets_rep1], axis = 1)
        rep1.to_csv("condition_files/AMP_rep1.csv")

        rep2 = pd.concat([primes_rep2,targets_rep2], axis = 1)
        rep2.to_csv("condition_files/AMP_rep2.csv")

        rep3 = pd.concat([primes_rep3,targets_rep3], axis = 1)
        rep3.to_csv("condition_files/AMP_rep3.csv")

        rep4 = pd.concat([primes_rep4,targets_rep4], axis = 1)
        rep4.to_csv("condition_files/AMP_rep4.csv")

        # Concatenating all of the reps horizontally

        df_full = pd.concat([rep1,rep2,rep3,rep4], axis = 0)

        # Writing AMP conditions to CSV

        df_full.reset_index(inplace=True, drop=True)
        df_full.to_csv("condition_files/AMP_conditions.csv")

        # Generating LDT word list

        ldt_wordlist = []

        for k,v in full_ldt_words.items():
            if k != "control":
                for i in v:
                    ldt_wordlist.append(i)

        # Pulling the words, correct answers, categories, & masks for all of the indices for our words

        LDT_words = words.loc[ldt_wordlist].words.values
        LDT_corr = words.loc[ldt_wordlist].correct_ldt.values
        LDT_category = words.loc[ldt_wordlist].category.values
        LDT_masklist = words.loc[ldt_wordlist].masks.values

        df_ldt = pd.DataFrame(
            {'words': LDT_words.tolist(),
            'corr_ans': LDT_corr.tolist(),
            'category': LDT_category.tolist(),
            'mask': LDT_masklist.tolist()     })

        df_ldt.to_csv("condition_files/LDT_conditions.csv")

        # Creating the list for the memory task

        memtask_wordlist = memtask_words.words.values
        memtask_cats = memtask_words.category.values
        seen = pd.DataFrame(
            {'words': AMP_words.tolist(),
             'corr_ans': ['right'] * 82,
             'category': AMP_category.tolist()
            })

        unseen = pd.DataFrame(
            {'words': memtask_wordlist.tolist(),
             'corr_ans': ['left'] * 50,
             'category': memtask_cats.tolist()
            })

        seen_selection = seen.sample(n=50)
        memtask_final = pd.concat([seen_selection,unseen], axis = 0)
        memtask_final = memtask_final.sample(frac=1).reset_index(drop=True)

        memtask_final.to_csv("condition_files/memtask_conditions.csv")
  Routine fix
    ImageComponent LDT_fix_cross
      image = images/crosshair.png
      size = [.05,.05]
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $rand_duration
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        rand_duration = random.randint(6, 18)
  Routine AMP_feedback
    RatingScaleComponent AMP_nonword_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the symbols that you saw?
      showAccept = False
      size = 2.0
      startVal [condition] = $AMP_feedback_instr.status==FINISHED
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      customize_everything:
        scale = "To what extent did you base your ratings of the symbols on the symbols themselves?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_word_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [condition] = $AMP_nonword_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you base your ratings on the strings of letters that appeared before the symbols?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    RatingScaleComponent AMP_random_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [condition] = $AMP_word_rating.status==FINISHED
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent AMP_feedback_instr
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a few questions. Please note that your responses to these questions are completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('task', "AMP_feedback")
  Routine LDT_feedback
    RatingScaleComponent LDT_rating
      disappear = True
      forceEndRoutine = False
      high = 7
      labels = Not at all, Completely
      low = 1
      pos = 0, 0
      scaleDescription = To what extent did you base your ratings on the nonsense words?
      showAccept = False
      size = 2.0
      startVal [time (s)] = 10
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      customize_everything:
        scale = "To what extent did you respond randomly in this task?",
        choices=None,
        low=1,
        high=7,
        pos=[0,0],
        precision=1,
        labels=["Not at all","Somewhat","Completely"],
        tickMarks=None,
        showValue=False,
        showAccept=True,
        acceptPreText='Click a value',
        acceptText='Accept?',
        acceptSize=1.0,
        tickHeight=1.0,
        marker='slider',
        markerStart=4,
        textSize=1.0,
        stretch = 1.5,
        textColor='Black',
        textFont='Helvetica Bold',
        disappear=True
    TextComponent LDT_feedback_inst
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You will now respond to a question. Please note that your response to this question is completely anonymous and will not affect your SONA credit in any way.
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    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData("task", "LDT_feedback")
  Routine end
    TextComponent instr_end
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Thank you for participating. You will now respond to a short survey.
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    CodeComponent code_18
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine logo_trial
    ImageComponent img_logo_trial
      image [set every repeat] = $symbol
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    ImageComponent mask_logo_trial
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [time (s)] = .5
      units = height
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    ImageComponent key_reminder_logo_trial
      durationEstim = 3.5
      image = images/layout_reminder_AMP.png
      pos = (0, -7)
      size = (20, 10)
      startVal [time (s)] = .0
      units = deg
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    KeyboardComponent sym_resp_trial
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 3.5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_04
      Code Type = Py
      Begin Routine:
        keys = []
        sym_id = symbol.split("_")[1].split(".")[0]
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                logo_trials.finished = True
      End Routine:
        thisExp.addData('symbol_id', sym_id)
        thisExp.addData('keypress', sym_resp_trial.keys)
        thisExp.addData('RT', sym_resp_trial.rt)
        thisExp.addData('task', "symbols")
  Routine AMP_prime
    TextComponent AMP_wordstim
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [duration (frames)] = $prime_dur
      text [set every repeat] = $words
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    TextComponent AMP_maskstim
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [frame N] = $prime_dur
      stopVal [duration (frames)] = $mask_dur
      text [set every repeat] = $masks
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    ImageComponent AMP_key_reminder_1
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 12
      units = deg
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    CodeComponent code_07
      Code Type = Py
      Begin Experiment:
        prime_durs = [1, 3, 6]
        prime_dur = np.random.choice(prime_durs)
        mask_dur = 2 * prime_dur
  Routine AMP_target_trials
    ImageComponent img_logo_AMP_trials
      image [set every repeat] = $symbols
      size = (0.1, 0.1)
      startVal [frame N] = 1
      stopVal [duration (frames)] = 30
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    ImageComponent mask_AMP_2
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [frame N] = 31
      units = height
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    ImageComponent AMP_key_reminder_2
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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    KeyboardComponent resp_AMP_trials
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        keys = []
        sym_id = symbols.split("_")[1].split(".")[0]
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_trials.finished = True
      End Routine:
        thisExp.addData('task', "AMP")
        thisExp.addData('symbol_id', sym_id)
        thisExp.addData('keypress', resp_AMP_trials.keys)
        thisExp.addData('RT', resp_AMP_trials.rt)
        thisExp.addData('exp_time', globalClock.getTime())
        thisExp.addData('prime_dur', prime_dur)
  Routine AMP_target_prac
    ImageComponent img_logo_AMP
      image [set every repeat] = $symbols
      size = (0.1, 0.1)
      startVal [frame N] = 1
      stopVal [duration (frames)] = 30
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    ImageComponent mask_AMP
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [frame N] = 31
      units = height
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    ImageComponent AMP_key_reminder
      durationEstim = 5
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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    KeyboardComponent resp_AMP
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_08
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                AMP_pracs.finished = True
      End Routine:
        thisExp.addData('task', "AMP_prac")
        thisExp.addData('keypress', resp_AMP.keys)
        thisExp.addData('RT', resp_AMP.rt)
        thisExp.addData('exp_time', globalClock.getTime())
        thisExp.addData('prime_dur', prime_dur)
  Routine instr_memtask
    TextComponent instr_memtask1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = In this task, you will see a selection of words you saw in this experiment, along with words you did NOT see.
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    TextComponent instr_memtask2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
      text = You will be asked to respond as to whether you think you saw the word during the experiment or not.
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    TextComponent instr_memtask3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      stopVal [duration (s)] = 6
      text = If you think you saw the word during the experiment, press the RIGHT arrow key.
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    TextComponent instr_memtask4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 22
      stopVal [duration (s)] = 6
      text = If you think you did NOT see the word in the experiment, press the LEFT arrow key.
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    ImageComponent layout_reminder_memtask
      image = images/layout_reminder_memtask.png
      size = (0.9, 0.5)
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
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    TextComponent instr_memtask5
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 34
      text = If you are ready to begin, press the RIGHT arrow key.
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    KeyboardComponent key_resp_instr_memtask
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 34
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    CodeComponent code_23
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
  Routine memtask
    TextComponent memtask_word
      color = #212121
      durationEstim = 3
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $words
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    KeyboardComponent resp_memtask
      allowedKeys = 'left','right','escape'
      correctAns = $corr_ans
      discard previous = False
      durationEstim = 2.9
      forceEndRoutine = True
      startVal [time (s)] = .1
      storeCorrect = True
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    ImageComponent memtask_layout_reminder
      durationEstim = 3
      image = images/layout_reminder_memtask.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                memtask_trials.finished = True
      End Routine:
        thisExp.addData('task', "mem")
        thisExp.addData('keypress', resp_memtask.keys)
        thisExp.addData('RT', resp_memtask.rt)
        thisExp.addData('corr', resp_memtask.corr)
  Routine rest
    TextComponent rest_txt1
      color = black
      durationEstim = 10
      font = verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Take a quick break for as long as you need to rest your eyes. Press the RIGHT arrow key when you are ready for the next round.
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    KeyboardComponent rest_key_resp
      allowedKeys = 'right'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_main
    TextComponent instr_2
      color = #212121
      font = Verdana
      letterHeight = .05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = The goal of this experiment is to better understand how people interpret symbols and understand language
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    TextComponent instr_3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
      text = You will be asked to complete four different tasks, followed by a short survey.
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    TextComponent instr_4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = Before we begin, please make sure your fingers are on the correct keys.
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    TextComponent instr_5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 18
      stopVal [duration (s)] = 6
      text = Your right index finger should be on the left arrow key
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    TextComponent instr_6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 24
      stopVal [duration (s)] = 4
      text = Your right ring finger should be on the right arrow key
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    ImageComponent position_reminder
      image = images/keyboard_diagram.png
      size = (0.9, 0.5)
      startVal [time (s)] = 28
      stopVal [duration (s)] = 4
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    TextComponent instr_7
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 32
      text = If you are ready to begin please press the right arrow key
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    KeyboardComponent key_resp_instr
      allowedKeys = 'right','esc'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 38
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    CodeComponent code_02
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:         continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine instr_symbol
    TextComponent instr_sym1
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = In this task, you will see a selection of symbols.
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    TextComponent instr_sym2
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 10
      text = You will be asked to rate whether each symbol you see makes you feel pleasant or unpleasant.
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    TextComponent instr_sym3
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      stopVal [duration (s)] = 6
      text = If the symbol made you feel pleasant, press the RIGHT arrow key
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    TextComponent instr_sym4
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 22
      stopVal [duration (s)] = 6
      text = If the symbol made you feel unpleasant, press the LEFT arrow key
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    TextComponent instr_sym5
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 6
      text = The symbol will look something like this.
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    ImageComponent logo_example
      image = images/symbols/symbol_1.png
      size = (0.1, 0.1)
      startVal [time (s)] = 34
      stopVal [duration (s)] = 6
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    TextComponent instr_sym6
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10
      text = Remember that you will press RIGHT if the symbol made you feel pleasant and LEFT if the symbol made you feel unpleasant.
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    ImageComponent logo_prac_layout_reminder
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 6
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    TextComponent instr_sym7
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 56
      stopVal [duration (s)] = 6
      text = First, we will do a brief practice round.
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    TextComponent instr_sym8
      color = #212121
      durationEstim = 10
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 62
      text = When you are ready to begin, press the RIGHT arrow key.
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    KeyboardComponent resp_sym_rate
      allowedKeys = 'right'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 62
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    CodeComponent code_03
      Code Type = Py
      Begin Routine:
        keys = []
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine symbol_prac
    ImageComponent img_logo_prac
      image = images/symbols/symbol_2.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 30
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    ImageComponent mask_logo_prac
      durationEstim = 3
      image = images/symbols/mask.png
      size = (0.1, 0.1)
      startVal [frame N] = 31
      units = height
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    ImageComponent key_reminder_logo_prac
      durationEstim = 3
      image = images/layout_reminder_AMP.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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    KeyboardComponent sym_resp_1
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine instr_symbol2
    TextComponent instr_sym9
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Great job!
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    TextComponent instr_sym10
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6
      text = Remember that LEFT is unpleasant and RIGHT is pleasant.
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    ImageComponent sym_layout_reminder
      image = images/layout_reminder_AMP.png
      size = (0.9, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 6
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    TextComponent instr_sym11
      color = #212121
      durationEstim = 6
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 16
      text = If you are ready to begin, please press the RIGHT arrow key
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    KeyboardComponent sym_resp_2
      allowedKeys = 'right'
      durationEstim = 6
      forceEndRoutine = True
      startVal [time (s)] = 16
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    CodeComponent code_05
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
      End Routine:
        thisExp.addData('exp_time', globalClock.getTime())
  Routine LDT_prac
    TextComponent LDT_word_prac
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $ldt_dur
      text [set every repeat] = $words
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    TextComponent LDT_mask_prac
      color = #212121
      durationEstim = 3
      font = Verdana
      letterHeight = 0.05
      startVal [condition] = $LDT_word_prac.status==FINISHED
      stopVal [duration (frames)] = $ldt_mask_dur
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT_prac
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      durationEstim = 3
      forceEndRoutine = True
      startVal [frame N] = $ldt_dur
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        keys = []
        ldt_dur = random.randint(1, 6)
        ldt_mask_dur = 2 * ldt_dur
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                try:
                    LDT_pracs_1.finished = True
                except:
                    LDT_pracs.finished = True
      End Routine:
        thisExp.addData('task', "LDT_prac")
        thisExp.addData('keypress', resp_LDT_prac.keys)
        thisExp.addData('LDT_dur', ldt_dur)
        thisExp.addData('RT', resp_LDT_prac.rt)
        thisExp.addData('corr', resp_LDT_prac.corr)
        thisExp.addData('exp_time', globalClock.getTime())
    ImageComponent key_reminder_3
      durationEstim = 3
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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  Routine LDT_trial
    TextComponent LDT_word_trial
      color = #212121
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $ldt_dur
      text [set every repeat] = $words
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    TextComponent LDT_mask_trial
      color = #212121
      durationEstim = 3
      font = Verdana
      letterHeight = 0.05
      startVal [frame N] = $LDT_word_trial.status==FINISHED
      text [set every repeat] = $mask
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    KeyboardComponent resp_LDT_trial
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      durationEstim = 3
      forceEndRoutine = True
      startVal [frame N] = $ldt_dur
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        keys = []
        ldt_dur = random.randint(1, 6)
      Each Frame:
        keys = event.getKeys()
        if 'j' in keys:
                continueRoutine = False
                try:
                    LDT_trials_1.finished = True
                except:
                    LDT_trials.finished = True
      End Routine:
        thisExp.addData('task', "LDT")
        thisExp.addData('keypress', resp_LDT_trial.keys)
        thisExp.addData('LDT_dur', ldt_dur)
        thisExp.addData('RT', resp_LDT_trial.rt)
        thisExp.addData('corr', resp_LDT_trial.corr)
        thisExp.addData('exp_time', globalClock.getTime())
    ImageComponent key_reminder
      durationEstim = 3
      image = images/layout_reminder_LDT.png
      pos = (0, -6)
      size = (20, 10)
      startVal [time (s)] = 0
      units = deg
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Flow
  Routine hold
  Routine instr_main
  LoopInitiator LDT_trials_cond2 loopType="TrialHandler"
    loopType = random
    nReps = int(expInfo['participant ID']) % 2 == 1
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    Routine instr_LDT
    LoopInitiator LDT_pracs_1 loopType="TrialHandler"
      conditionsFile = condition_files/ldt_testrun.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('words', 'keyboard'), ('mask', '&&&&&&&')]),
        OrderedDict([('words', 'bisebell'), ('mask', '&&&&&&&')])]
      Routine fix
      Routine LDT_prac
    LoopTerminator LDT_pracs_1
    Routine instr_LDT_2
    LoopInitiator LDT_trials_1 loopType="TrialHandler"
      conditionsFile = condition_files/LDT_conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('category', 'care.virtue'), ('corr_ans', 'left'), ('mask', '&&&&'), ('words', 'good')]),
        OrderedDict([('category', 'care.virtue'), ('corr_ans', 'left'), ('mask', '&&&&'), ('words', 'safe')]),
        OrderedDict([('category', 'care.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&&'), ('words', 'improve')]),
        OrderedDict([('category', 'care.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&&&'), ('words', 'increase')]),
        OrderedDict([('category', 'care.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&&'), ('words', 'restore')]),
        OrderedDict([('category', 'care.vice'), ('corr_ans', 'left'), ('mask', '&&&&&&'), ('words', 'killed')]),
        OrderedDict([('category', 'care.vice'), ('corr_ans', 'left'), ('mask', '&&&&&&&&&'), ('words', 'civilians')]),
        OrderedDict([('category', 'care.vice'), ('corr_ans', 'left'), ('mask', '&&&&&&&'), ('words', 'torture')]),
        OrderedDict([('category', 'care.vice'), ('corr_ans', 'left'), ('mask', '&&&&&&&'), ('words', 'victims')]),
        OrderedDict([('category', 'care.vice'), ('corr_ans', 'left'), ('mask', '&&&&&&&'), ('words', 'injured')]),
        OrderedDict([('category', 'fairness.virtue'), ('corr_ans', 'left'), ('mask', '&&&&'), ('words', 'free')]),
        OrderedDict([('category', 'fairness.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&&&&'), ('words', 'integrity')]),
        OrderedDict([('category', 'fairness.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&'), ('words', 'credit')]),
        OrderedDict([('category', 'fairness.virtue'), ('corr_ans', 'left'), ('mask', '&&&&&&&&&'), ('words', 'agreement')])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
      Routine fix
      Routine LDT_trial
    LoopTerminator LDT_trials_1
    Routine LDT_feedback
  LoopTerminator LDT_trials_cond2
  Routine instr_symbol
  Routine symbol_prac
  Routine instr_symbol2
  LoopInitiator logo_trials loopType="TrialHandler"
    conditionsFile = condition_files/symbols.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('symbol', 'images/symbols/symbol_1.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_76.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_62.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_63.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_77.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_2.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_49.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_61.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_75.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_74.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_60.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_48.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_3.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_7.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_64.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_70.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_58.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_59.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_71.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_65.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_6.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_4.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_73.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_67.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_66.png')]),
      OrderedDict([('symbol', 'images/symbols/symbol_72.png')])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
    Routine logo_trial
  LoopTerminator logo_trials
  Routine instr_AMP
  LoopInitiator AMP_pracs loopType="TrialHandler"
    conditionsFile = condition_files/amp_testrun.csv
    loopType = random
    nReps = 1
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    Routine AMP_prime
    Routine AMP_target_prac
  LoopTerminator AMP_pracs
  Routine instr_AMP_2
  Routine instr_AMP_3
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = condition_files/AMP_reps.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('conditionfile', 'condition_files/AMP_rep1.csv')]),
      OrderedDict([('conditionfile', 'condition_files/AMP_rep2.csv')]),
      OrderedDict([('conditionfile', 'condition_files/AMP_rep3.csv')]),
      OrderedDict([('conditionfile', 'condition_files/AMP_rep4.csv')])]
    LoopInitiator AMP_trials loopType="TrialHandler"
      conditionsFile = $conditionfile
      loopType = sequential
      nReps = 1
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      Routine AMP_prime
      Routine AMP_target_trials
    LoopTerminator AMP_trials
    Routine rest
  LoopTerminator trials_loop
  Routine AMP_feedback
  Routine instr_memtask
  LoopInitiator memtask_trials loopType="TrialHandler"
    conditionsFile = condition_files/memtask_conditions.csv
    loopType = random
    nReps = 1
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    Routine memtask
  LoopTerminator memtask_trials
  LoopInitiator LDT_cond1 loopType="TrialHandler"
    loopType = random
    nReps = int(expInfo['participant ID']) % 2 == 0
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    Routine instr_LDT
    LoopInitiator LDT_pracs loopType="TrialHandler"
      conditionsFile = condition_files/ldt_testrun.csv
      loopType = random
      nReps = 1
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      Routine fix
      Routine LDT_prac
    LoopTerminator LDT_pracs
    Routine instr_LDT_2
    LoopInitiator LDT_trials loopType="TrialHandler"
      conditionsFile = condition_files/LDT_conditions.csv
      loopType = random
      nReps = 1
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      Routine fix
      Routine LDT_trial
    LoopTerminator LDT_trials
    Routine LDT_feedback
  LoopTerminator LDT_cond1
  Routine end
